PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'n_square': u'64', u'opacity': u'0.1', u'lowest_opacity': u'0.1', u'probeFrames': u'4', u'participant': u'test', u'step_size': u'0.1', u'premask': u'4', u'session': u'1', u'image_size': u'512', u'postmask': u'4'}
  Units = use prefs
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  Save csv file = True
  Data filename = 'data/%s/%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = calibration
  Screen = 1
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Routines
  Routine premask
    GratingComponent premasking
      tex [set every repeat] = $masks
      stopVal [duration (frames)] = $premask_dur
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size/1.5, image_size/1.5)
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  Routine discriminate
    CodeComponent get_response
      Begin Routine:
        main_loop.addData("discrim_resptime", globalClock.getTime() - startTime)
        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]
        idx = np.random.choice([0,1])
        resp_msg = '{}'.format(resp_options[idx][0])
        main_loop.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1
        main_loop.addData('correctAns',temp_correctAns)
        # objective accuracy
        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0
        main_loop.addData('response.corr' , temp_corr)
    TextComponent response_options
      text [set every repeat] = $resp_msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blank_period
      stopVal [duration (s)] = $blank_dur
      startVal [condition] = $fixation_cross.status == FINISHED
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        main_loop.addData("fixation_onset", globalClock.getTime() - startTime)
        main_loop.addData("blank_dur",blank_dur)
  Routine visibility
    CodeComponent trigger_visibility
      Begin Routine:
        main_loop.addData("visible_resptime", globalClock.getTime() - startTime)
      End Routine:
        count += 1
        main_loop.addData('opacity',opacity)

        #if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
        #    opacity += np.random.choice([0.02, 0.04, 0.08],size = 1)[0]
        #    if opacity > 1: opacity = 1
        #    #curr += np.random.choice([1,2,3],size=1)[0]
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
        #    opacity -= 0.1
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= 1
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
        #    opacity -= np.random.choice([0.02, 0.04, 0.08],size = 1)[0]
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
        #    #if curr < 1: curr = 1

        if ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 0): # invisible and incorrect
            opacity += 2 * step_size
            unconscious_trials.append(temp_corr)
            n_unconscious += 1
        elif ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 1): # invisible and correct
            opacity += step_size
            unconscious_trials.append(temp_corr)
            n_unconscious += 1
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 0): # visible and incorrect
            opacity -= step_size
            if opacity < lowest_opacity: opacity = lowest_opacity
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 1): # visible and correct
            opacity -= 2 * step_size
            if opacity < lowest_opacity: opacity = lowest_opacity
    TextComponent visibility_message
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent visible
      correctAns = '1'
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine jitter1
    TextComponent jitter_delay
      text = +
      stopVal [duration (s)] = $jitter1_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent log_jitter_delay
      Begin Routine:
        jitter1_dur = jitter1_dur_options[jitter_counter]
        main_loop.addData('jitter1',jitter1_dur)
  Routine trial
    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("latin-1")
      Begin Routine:
        main_loop.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent presentation
      image [set every repeat] = $PATH_english
      startVal [time (s)] = 0.0
      units = pix
      size = $(image_size, image_size)
      opacity [set every repeat] = $opacity
      stopVal [duration (frames)] = $curr
      texture resolution = 256
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  Routine intro
    CodeComponent settingThingsUp
      Begin Experiment:
        globalClock = core.Clock()

        premask_dur = int(expInfo['premask'])
        postmask_dur = int(expInfo['postmask'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        opacity = float(expInfo['opacity'])
        session = int(expInfo['session'])
        step_size = float(expInfo['step_size'])

        curr = int(expInfo['probeFrames'])
        lowest_opacity = float(expInfo['lowest_opacity'])
        count = 0

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Wating for Scanner ..."
        msg = visual.TextStim(win,color = 'DarkGray',text = wait_msg)

        # jitter 1
        jitter_counter = 0
        jitter1_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*6,[3.0]*4,[3.5]*4])
        np.random.shuffle(jitter1_dur_options)

        # jitter 2
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*6,[7.5]*4,[8.0]*4])
        np.random.shuffle(jitter2_dur_options)

        np.random.seed(12345)
        masks = np.random.rand(n_square,n_square)*2 - 1

        # save corrections of trials of unconscious
        unconscious_trials = []
        # count unconscious trials
        n_unconscious = 0
      Begin Routine:
        msg.draw()
        win.flip()

        while True:
            if (event.getKeys() == ['q']):#(parallel.readPin(10) == 1) or
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine end_experiment
    CodeComponent theEnd
      End Experiment:
        print(globalClock.getTime() - startTime)
        print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc))
  Routine intoPrepare
    TextComponent preparation
      stopVal [duration (s)] = .3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent first_blank
      stopVal [duration (s)] = .1
      startVal [time (s)] = .3
      letterHeight = 0.1
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  Routine jitter2
    CodeComponent code_2
      Begin Routine:
        meanacc = main_loop.data['response.corr'].mean()


        msg_post = '{}/{}, mean unconscious = {:.2f},opacity = {:.1f},p(correct) = {:.2f}'.format(
                main_loop.thisN+1,main_loop.nTotal,
                n_unconscious/(main_loop.thisN+1),opacity,meanacc)
      End Routine:
        print('{}/{}, mean unconscious = {:.2f},opacity = {:.1f},p(correct) = {:.2f}'.format(
                main_loop.thisN+1,main_loop.nTotal,
                n_unconscious/(main_loop.thisN+1),opacity,meanacc))
    TextComponent post_jitter
      text [set every repeat] = $msg_post
      stopVal [duration (s)] = $1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine postmask
    GratingComponent postmasking
      tex [set every repeat] = $masks
      stopVal [duration (frames)] = postmask_dur
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size/1.5, image_size/1.5)
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Flow
  Routine intro
  Routine intoPrepare
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = ..\experiment_csvs\session_1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Category', u'object'), ('Word', u'Arco'), ('Mean_Valence', 4.8421052631578947), ('SD_Valence', 1.3259635107586647), ('Mean_Arousal', 4.0526315789473681), ('SD_Arousal', 1.7076515946484954), ('Mean_Familiarity', 4.0800000000000001), ('SD_Familiarity', 2.4650895859312425), ('Mean_Concreteness', 6.2000000000000002), ('SD_Concreteness', 2.2546248764114467), ('Frequency', 22.859999999999999), ('Length', 4), ('English', u'Arc'), ('log_frequency', 3.1293886583666644), ('picked', True), ('PATH_spanish', u'../stimuli_figure/Arc_es.jpeg'), ('PATH_english', u'../stimuli_figure/Arc_en.jpeg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,
      OrderedDict([('Category', u'object'), ('Word', u'Faja'), ('Mean_Valence', 3.6842105263157889), ('SD_Valence', 1.6620609667468578), ('Mean_Arousal', 3.8421052631578951), ('SD_Arousal', 1.808782116612434), ('Mean_Familiarity', 3.96), ('SD_Familiarity', 2.4913182588073064), ('Mean_Concreteness', 7.0416666666666679), ('SD_Concreteness', 1.3344650993747542), ('Frequency', 2.3199999999999998), ('Length', 4), ('English', u'Belt'), ('log_frequency', 0.84156718567821853), ('picked', True), ('PATH_spanish', u'../stimuli_figure/Belt_es.jpeg'), ('PATH_english', u'../stimuli_figure/Belt_en.jpeg'), ('blank_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,
      OrderedDict([('Category', u'animal'), ('Word', u'\xc1guila'), ('Mean_Valence', 6.1578947368421053), ('SD_Valence', 1.5513954623216122), ('Mean_Arousal', 6.0), ('SD_Arousal', 1.6765472885698187), ('Mean_Familiarity', 4.3200000000000003), ('SD_Familiarity', 2.4447222064411878), ('Mean_Concreteness', 7.3600000000000003), ('SD_Concreteness', 1.8), ('Frequency', 7.8600000000000003), ('Length', 6), ('English', u'Eagle'), ('log_frequency', 2.0617866064411148), ('picked', True), ('PATH_spanish', u'../stimuli_figure/Eagle_es.jpeg'), ('PATH_english', u'../stimuli_figure/Eagle_en.jpeg'), ('blank_dur', 0.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,
      OrderedDict([('Category', u'object'), ('Word', u'Soplete'), ('Mean_Valence', 3.763157894736842), ('SD_Valence', 1.6180437057925561), ('Mean_Arousal', 4.8421052631578947), ('SD_Arousal', 2.0205206151355566), ('Mean_Familiarity', 3.9166666666666665), ('SD_Familiarity', 2.7491764247666524), ('Mean_Concreteness', 7.4000000000000004), ('SD_Concreteness', 1.5275252316519468), ('Frequency', 2.5), ('Length', 7), ('English', u'Blowtorch'), ('log_frequency', 0.91629073187415522), ('picked', True), ('PATH_spanish', u'../stimuli_figure/Blowtorch_es.jpeg'), ('PATH_english', u'../stimuli_figure/Blowtorch_en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
    Routine fixation
    Routine premask
    Routine trial
    Routine postmask
    Routine discriminate
    Routine visibility
    Routine jitter2
  LoopTerminator main_loop
  Routine end_experiment
