PsychoPy2experiment version="1.82.01"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'n_square': u'32', u'opacity': u'0.6', u'probeFrames': u'5', u'participant': u'test', u'premask': u'20', u'session': u'001', u'image_size': u'128', u'postmask': u'20'}
  Units = use prefs
  Screen = 1
  Window size (pixels) = [1280, 720]
  Save csv file = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = experiment
  Full-screen window = True
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Routines
  Routine premask
    GratingComponent premasking
      tex [set every frame] = $np.random.rand(n_square,n_square)*2 - 1
      stopVal [duration (frames)] = $premask_dur
      pos = [0, -0]
      units = pix
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size, image_size)
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  Routine discriminate
    TextComponent response_options
      text [set every repeat] = $resp_msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    CodeComponent get_response
      Begin Routine:
        trials.addData("discrim_resptime", globalClock.getTime() - startTime)
        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]
        idx = np.random.choice([0,1])
        resp_msg = '{}'.format(resp_options[idx][0])
        trials.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1
        trials.addData('correctAns',temp_correctAns)
        # objective accuracy
        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0
        trials.addData('response.corr' , temp_corr)
  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blank_period
      stopVal [duration (s)] = 0.5
      startVal [condition] = $fixation_cross.status == FINISHED
      letterHeight = 0.1
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    CodeComponent code
  Routine visibility
    TextComponent visibility_message
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent visibility_resp
      stopVal [duration (s)] = 1.5
      forceEndRoutine = True
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
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    CodeComponent trigger_visibility
      Begin Routine:
        trials.addData("visible_resptime", globalClock.getTime() - startTime)
      End Routine:
        count += 1
        trials.addData('probe_Frames',curr)
        if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
            curr += np.random.choice([1,2,3],size=1)[0]
            if curr < 1:  curr = 1
        elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
            curr -= 1
            if curr < 1:  curr = 1
        elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
            curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
            if curr < 1: curr = 1
  Routine jitter1
    TextComponent jitter_delay
      text = +
      stopVal [duration (s)] = $jitter1_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent log_jitter_delay
      Begin Routine:
        jitter1_dur = jitter1_dur_options[jitter_counter]
        trials.addData('jitter1',jitter1_dur)
  Routine trial
    ImageComponent presentation
      image [set every repeat] = $PATH
      startVal [time (s)] = 0.0
      size = $(image_size, image_size)
      units = pix
      opacity [set every repeat] = $opacity
      stopVal [duration (frames)] = $curr
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    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("latin-1")
  Routine intro
    CodeComponent settingThingsUp
      Begin Experiment:
        premask_dur = int(expInfo['premask'])
        postmask_dur = int(expInfo['postmask'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        opacity = float(expInfo['opacity'])

        curr = int(expInfo['probeFrames'])
        count = 0

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Wating for Scanner ..."
        msg = visual.TextStim(win,color = 'DarkGray',text = wait_msg)




        # jitter 1
        jitter_count = 0
        jitter1_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*6,[3.0]*4,[3.5]*4])
        np.random.shuffle(jitter1_dur_options)

        # jitter 2
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*6,[7.5]*4,[8.0]*4])
        np.random.shuffle(jitter2_dur_options)
      Begin Routine:
        msg.draw()
        win.flip()
        while True:
            if (parallel.readPin(10) == 1) or (event.getKeys() == ['q']):
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes

        globalClock.reset()
        startTime = globalClock.getTime()
  Routine end_experiment
    CodeComponent theEnd
      Begin Experiment:
        print(globalClock.getTime() - startTime)
        #10;print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc))
  Routine intoPrepare
    TextComponent preparation
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent first_blank
      stopVal [duration (s)] = 10
      startVal [time (s)] = 3
      letterHeight = 0.1
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  Routine jitter2
    TextComponent post_jitter
      text = +
      stopVal [duration (s)] = $jitter2_delay_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Routine:
        jitter2_delay_dur = jitter2_dur_options[jitter_count]
        trials.addData('jitter2',jitter2_delay_dur)
        jitter_count += 1
  Routine postmask
    GratingComponent postmasking
      tex [set every frame] = $np.random.rand(n_square,n_square)*2 -1
      stopVal [duration (frames)] = postmask_dur
      units = pix
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size, image_size)
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Flow
  Routine intro
  Routine intoPrepare
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = ..\data\sampled_words.csv
    loopType = random
    nReps = 1
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    conditions:
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      {'Category': 'animal', 'Mean_Familiarity': 4.2400000000000002, 'SD_Concreteness': 2.6223399220289245, 'Word': 'Almeja', 'Mean_Arousal': 3.4210526315789487, 'Mean_Valence': 4.9210526315789487, 'SD_Familiarity': 2.3853720883753127, 'Length': 6, 'Frequency': 0.54000000000000004, 'picked': True, 'English': 'Clam', 'log_frequency': -0.61618613942381706, 'PATH': '../stimuli_figure/Clam.jpeg', 'Mean_Concreteness': 6.7199999999999998, 'SD_Arousal': 1.7496189383941527, 'SD_Valence': 1.6986732334124204},
      {'Category': 'animal', 'Mean_Familiarity': 3.3199999999999998, 'SD_Concreteness': 1.943364779619789, 'Word': 'Asno', 'Mean_Arousal': 4.5263157894736841, 'Mean_Valence': 5.3157894736842106, 'SD_Familiarity': 2.3043437243605824, 'Length': 4, 'Frequency': 3.9300000000000002, 'picked': True, 'English': 'Donkey', 'log_frequency': 1.3686394258811698, 'PATH': '../stimuli_figure/Donkey.jpeg', 'Mean_Concreteness': 6.8799999999999999, 'SD_Arousal': 1.5894388284780532, 'SD_Valence': 1.6942711604969272},
      {'Category': 'animal', 'Mean_Familiarity': 3.4399999999999999, 'SD_Concreteness': 1.920937271229854, 'Word': 'Babosa', 'Mean_Arousal': 5.0789473684210513, 'Mean_Valence': 2.1315789473684208, 'SD_Familiarity': 2.2000000000000002, 'Length': 6, 'Frequency': 0.35999999999999999, 'picked': True, 'English': 'Slug', 'log_frequency': -1.0216512475319814, 'PATH': '../stimuli_figure/Slug.jpeg', 'Mean_Concreteness': 6.7599999999999998, 'SD_Arousal': 2.5296253215496805, 'SD_Valence': 1.3390406535939228},
      {'Category': 'animal', 'Mean_Familiarity': 4.8799999999999999, 'SD_Concreteness': 1.3988090172238197, 'Word': 'Ballena', 'Mean_Arousal': 4.4324324324324325, 'Mean_Valence': 6.3783783783783781, 'SD_Familiarity': 2.2605309110914629, 'Length': 7, 'Frequency': 3.04, 'picked': True, 'English': 'Whale', 'log_frequency': 1.1118575154181305, 'PATH': '../stimuli_figure/Whale.jpeg', 'Mean_Concreteness': 7.96, 'SD_Arousal': 1.9655440375029409, 'SD_Valence': 1.3611953764441211},
      {'Category': 'animal', 'Mean_Familiarity': 3.48, 'SD_Concreteness': 2.3965252624024922, 'Word': 'Buitre', 'Mean_Arousal': 5.4210526315789496, 'Mean_Valence': 3.1842105263157894, 'SD_Familiarity': 2.1432063207571352, 'Length': 6, 'Frequency': 3.5699999999999998, 'picked': True, 'English': 'Vulture', 'log_frequency': 1.2725655957915476, 'PATH': '../stimuli_figure/Vulture.jpeg', 'Mean_Concreteness': 6.9199999999999999, 'SD_Arousal': 1.3483038182636138, 'SD_Valence': 1.2914534689987498},
      {'Category': 'animal', 'Mean_Familiarity': 4.2800000000000002, 'SD_Concreteness': 1.293573860795485, 'Word': 'Camello', 'Mean_Arousal': 4.8684210526315788, 'Mean_Valence': 5.8157894736842106, 'SD_Familiarity': 2.622339922028925, 'Length': 7, 'Frequency': 2.3199999999999998, 'picked': True, 'English': 'Camel', 'log_frequency': 0.84156718567821853, 'PATH': '../stimuli_figure/Camel.jpeg', 'Mean_Concreteness': 7.5599999999999996, 'SD_Arousal': 1.9054835894898383, 'SD_Valence': 1.5041431637924283},
      {'Category': 'animal', 'Mean_Familiarity': 3.96, 'SD_Concreteness': 2.0631690833925047, 'Word': 'Canario', 'Mean_Arousal': 4.3421052631578965, 'Mean_Valence': 6.0526315789473673, 'SD_Familiarity': 2.207562758639793, 'Length': 7, 'Frequency': 5.54, 'picked': True, 'English': 'Canary', 'log_frequency': 1.7119945007591924, 'PATH': '../stimuli_figure/Canary.jpeg', 'Mean_Concreteness': 6.4400000000000004, 'SD_Arousal': 2.0305280339675962, 'SD_Valence': 1.6431243874063004},
      {'Category': 'animal', 'Mean_Familiarity': 4.4400000000000004, 'SD_Concreteness': 1.7253019059476715, 'Word': 'Canguro', 'Mean_Arousal': 4.9473684210526319, 'Mean_Valence': 6.1315789473684204, 'SD_Familiarity': 2.6627053911388696, 'Length': 7, 'Frequency': 0.35999999999999999, 'picked': True, 'English': 'Kangaroo', 'log_frequency': -1.0216512475319814, 'PATH': '../stimuli_figure/Kangaroo.jpeg', 'Mean_Concreteness': 7.6799999999999997, 'SD_Arousal': 1.9992886359369499, 'SD_Valence': 1.069757553527243},
      {'Category': 'animal', 'Mean_Familiarity': 5.0, 'SD_Concreteness': 1.2355835328567109, 'Word': 'Caracol', 'Mean_Arousal': 3.210526315789473, 'Mean_Valence': 5.0526315789473681, 'SD_Familiarity': 1.9790570145063195, 'Length': 7, 'Frequency': 5.3600000000000003, 'picked': True, 'English': 'Snail', 'log_frequency': 1.6789639750827108, 'PATH': '../stimuli_figure/Snail.jpeg', 'Mean_Concreteness': 7.8799999999999999, 'SD_Arousal': 2.1073602641865827, 'SD_Valence': 1.9583137868136629},
      {'Category': 'animal', 'Mean_Familiarity': 4.1600000000000001, 'SD_Concreteness': 2.2568414506414345, 'Word': 'Cebra', 'Mean_Arousal': 5.0263157894736841, 'Mean_Valence': 5.7105263157894735, 'SD_Familiarity': 2.718455443813637, 'Length': 5, 'Frequency': 0.89000000000000001, 'picked': True, 'English': 'Zebra', 'log_frequency': -0.11653381625595152, 'PATH': '../stimuli_figure/Zebra.jpeg', 'Mean_Concreteness': 7.5199999999999996, 'SD_Arousal': 1.731845478801922, 'SD_Valence': 1.4502170338382827},
      {'Category': 'animal', 'Mean_Familiarity': 4.2800000000000002, 'SD_Concreteness': 1.8556220879622385, 'Word': 'Chimpanc\xc3\xa9', 'Mean_Arousal': 5.8947368421052619, 'Mean_Valence': 6.2368421052631575, 'SD_Familiarity': 2.5742312768410431, 'Length': 9, 'Frequency': 4.8200000000000003, 'picked': True, 'English': 'Chimpanzee', 'log_frequency': 1.572773928062509, 'PATH': '../stimuli_figure/Chimpanzee.jpeg', 'Mean_Concreteness': 7.8799999999999999, 'SD_Arousal': 1.448008393364701, 'SD_Valence': 1.2177562558737995},
      {'Category': 'animal', 'Mean_Familiarity': 3.2400000000000002, 'SD_Concreteness': 1.9941581348194704, 'Word': 'Ciervo', 'Mean_Arousal': 4.8684210526315788, 'Mean_Valence': 6.5263157894736841, 'SD_Familiarity': 2.2597935008904391, 'Length': 6, 'Frequency': 1.79, 'picked': True, 'English': 'Deer', 'log_frequency': 0.58221561985266368, 'PATH': '../stimuli_figure/Deer.jpeg', 'Mean_Concreteness': 7.3200000000000003, 'SD_Arousal': 1.7269102643641998, 'SD_Valence': 1.2021791498743444},
      {'Category': 'animal', 'Mean_Familiarity': 4.5199999999999996, 'SD_Concreteness': 1.4525839046333966, 'Word': 'Cocodrilo', 'Mean_Arousal': 6.6052631578947381, 'Mean_Valence': 4.6315789473684212, 'SD_Familiarity': 2.5839246635044657, 'Length': 9, 'Frequency': 3.21, 'picked': True, 'English': 'Crocodile', 'log_frequency': 1.1662709371419244, 'PATH': '../stimuli_figure/Crocodile.jpeg', 'Mean_Concreteness': 7.8799999999999999, 'SD_Arousal': 1.8238580089975081, 'SD_Valence': 1.9371343090856401},
      {'Category': 'animal', 'Mean_Familiarity': 3.8799999999999999, 'SD_Concreteness': 1.5470401847829731, 'Word': 'Culebra', 'Mean_Arousal': 7.5789473684210531, 'Mean_Valence': 1.8157894736842104, 'SD_Familiarity': 2.350886357667394, 'Length': 7, 'Frequency': 2.3199999999999998, 'picked': True, 'English': 'Snake', 'log_frequency': 0.84156718567821853, 'PATH': '../stimuli_figure/Snake.jpeg', 'Mean_Concreteness': 7.3200000000000003, 'SD_Arousal': 1.5357290538648978, 'SD_Valence': 1.1821936357122866},
      {'Category': 'animal', 'Mean_Familiarity': 3.3599999999999999, 'SD_Concreteness': 1.5307950004273383, 'Word': 'Escarabajo', 'Mean_Arousal': 4.5526315789473681, 'Mean_Valence': 3.3684210526315788, 'SD_Familiarity': 1.8, 'Length': 10, 'Frequency': 1.4299999999999999, 'picked': True, 'English': 'Beetle', 'log_frequency': 0.35767444427181588, 'PATH': '../stimuli_figure/Beetle.jpeg', 'Mean_Concreteness': 7.5199999999999996, 'SD_Arousal': 2.2862381283489173, 'SD_Valence': 1.6833212445988381},
      {'Category': 'animal', 'Mean_Familiarity': 4.6399999999999997, 'SD_Concreteness': 2.3259406699226006, 'Word': 'Gallina', 'Mean_Arousal': 4.6052631578947372, 'Mean_Valence': 4.5789473684210513, 'SD_Familiarity': 2.6280537792569363, 'Length': 7, 'Frequency': 13.039999999999999, 'picked': True, 'English': 'Hen', 'log_frequency': 2.5680215564985067, 'PATH': '../stimuli_figure/Hen.jpeg', 'Mean_Concreteness': 6.9199999999999999, 'SD_Arousal': 1.6030287833434544, 'SD_Valence': 1.2221288238233792},
      {'Category': 'animal', 'Mean_Familiarity': 4.3600000000000003, 'SD_Concreteness': 1.5524174696260014, 'Word': 'Gaviota', 'Mean_Arousal': 5.0263157894736841, 'Mean_Valence': 5.0, 'SD_Familiarity': 2.3252240035460381, 'Length': 7, 'Frequency': 2.5, 'picked': True, 'English': 'Seagull', 'log_frequency': 0.91629073187415522, 'PATH': '../stimuli_figure/Seagull.jpeg', 'Mean_Concreteness': 7.9199999999999999, 'SD_Arousal': 1.9240559932469119, 'SD_Valence': 1.9864405216230223},
      {'Category': 'animal', 'Mean_Familiarity': 3.1200000000000001, 'SD_Concreteness': 1.4047538337136969, 'Word': 'Golondrina', 'Mean_Arousal': 4.3421052631578965, 'Mean_Valence': 6.3157894736842106, 'SD_Familiarity': 2.06801031589948, 'Length': 10, 'Frequency': 2.3199999999999998, 'picked': True, 'English': 'Swallow', 'log_frequency': 0.84156718567821853, 'PATH': '../stimuli_figure/Swallow.jpeg', 'Mean_Concreteness': 7.1600000000000001, 'SD_Arousal': 1.8347444890151736, 'SD_Valence': 1.3173532670307042},
      {'Category': 'animal', 'Mean_Familiarity': 3.3199999999999998, 'SD_Concreteness': 2.103172207246315, 'Word': 'Gorri\xc3\xb3n', 'Mean_Arousal': 4.3684210526315788, 'Mean_Valence': 5.7105263157894735, 'SD_Familiarity': 2.4785748593361738, 'Length': 7, 'Frequency': 0.89000000000000001, 'picked': True, 'English': 'Sparrow', 'log_frequency': -0.11653381625595152, 'PATH': '../stimuli_figure/Sparrow.jpeg', 'Mean_Concreteness': 7.5599999999999996, 'SD_Arousal': 1.8948158668521169, 'SD_Valence': 1.3931860188332874},
      {'Category': 'animal', 'Mean_Familiarity': 3.48, 'SD_Concreteness': 1.2741009902410934, 'Word': 'Leopardo', 'Mean_Arousal': 6.2894736842105265, 'Mean_Valence': 6.0789473684210531, 'SD_Familiarity': 1.9390719429665322, 'Length': 8, 'Frequency': 0.54000000000000004, 'picked': True, 'English': 'Leopard', 'log_frequency': -0.61618613942381706, 'PATH': '../stimuli_figure/Leopard.jpeg', 'Mean_Concreteness': 7.96, 'SD_Arousal': 1.844024604643876, 'SD_Valence': 1.9225768033352053},
      {'Category': 'animal', 'Mean_Familiarity': 4.1600000000000001, 'SD_Concreteness': 1.8929694486000912, 'Word': 'Liebre', 'Mean_Arousal': 4.6842105263157894, 'Mean_Valence': 5.6052631578947381, 'SD_Familiarity': 2.2300971578236966, 'Length': 6, 'Frequency': 5.0, 'picked': True, 'English': 'Hare', 'log_frequency': 1.6094379124341005, 'PATH': '../stimuli_figure/Hare.jpeg', 'Mean_Concreteness': 7.4000000000000004, 'SD_Arousal': 1.8759540010192832, 'SD_Valence': 1.2200902422142859},
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    Routine fixation
    Routine premask
    Routine trial
    Routine postmask
    Routine jitter1
    Routine discriminate
    Routine visibility
    Routine jitter2
  LoopTerminator main_loop
  Routine end_experiment
